\\\<?xml version="1.0" encoding="utf-8" standalone="yes"?>
\\\<?xml-stylesheet type="text/xsl" href="comments.xsl"?>
\\\
\\\<program>
\\\<researcher>
\\\ <name>Lisa Guccione</name>
\\\ <email>lisa_guccione@bigpond.com</email>
\\\</researcher>
\\\<study>Impulsive Behaviour Control</study>
\\\<title>Pretraining</title>
\\\<history>
\\\ <revision number="1.0">
\\\  <author>Simeon Morgan &lt;smorgan@students.latrobe.edu.au&gt;</author>
\\\  <created>2008-07-08 11:33</created>
\\\  <summary>First version</summary>
\\\ </revision>
\\\</history>

Y2KCOMPLIANT \\\Force use of 4-digit year

\\\<constant group="general" represents="parameter" name="Def_MaxDuration" summary="Default maximum duration (in minutes) for program to run"></constant>
^Def_MaxDuration = 30
\\\<constant group="general" represents="parameter" name="Abs_MaxTrials" summary="Limit on maximum number of trials to be recorded/processed"></constant>
^Abs_MaxTrials = 10000

\\\<constant group="general" represents="parameter" name="Def_RewardLicks" summary="Default number of licks for a reward"></constant>
^Def_RewardLicks = 2
\\\<constant group="general" represents="parameter" name="Def_MaxSubsequentPresses" summary="Maximum number of subsequent lever presses on same lever which will be rewarded"></constant>
^Def_MaxSubsequentPresses = 2

\\\<constant group="general" represents="parameter" name="Lever_LeftLever" summary="Value used to represent left lever"></constant>
^Lever_LeftLever = 0
\\\<constant group="general" represents="parameter" name="Lever_RightLever" summary="Value used to represent right lever"></constant>
^Lever_RightLever = 1
\\\<constant group="general" represents="parameter" name="Lever_CentreLever" summary="Value used to represent Centre lever"></constant>
^Lever_CentreLever = 2

\\\<constant group="general" represents="parameter" name="Lights_UseHouseRear" summary="Whether to use rear house light (No=0 Yes=1)"></constant>
^Lights_UseHouseRear = 1
\\\<constant group="general" represents="parameter" name="Lights_UseHouseMid" summary="Whether to use middle house light (No=0 Yes=1)"></constant>
^Lights_UseHouseMid = 1
\\\<constant group="general" represents="parameter" name="Lights_UseHouseFront" summary="Whether to use front house light (No=0 Yes=1)"></constant>
^Lights_UseHouseFront = 1

\\\<array name="C" outputName="Configuration" summary="Operational variables - should not change over the duration of the task once set">
DIM C = 6
\\\<column name="C_MaxDuration" outputName="Max Duration" summary="Maximum time before automatic termination (minutes)"></column>
^C_MaxDuration = 0
\\\<column name="C_MaxDurationMsec" summary="Maximum time before automatic termination in msec (autogenerated)"></column>
^C_MaxDurationMsec = 1
\\\<column name="C_RewardLicks" outputName="Reward Licks" summary="Number off licks permitted for small reward"></column>
^C_RewardLicks = 2
\\\<column name="C_MaxSubsequentPresses" outputName="Max Subsequent Presses" summary="Maximum number of subsequent lever presses on same lever which will be rewarded"></column>
^C_MaxSubsequentPresses = 3
\\\<column name="C_CamUnconnectedState" summary="Used to store 'Unconnected' StateID of camera"></column>
^C_CamUnconnectedState = 4
\\\<column name="C_CamConnectOkState" summary="Used to store 'Ok' StateID of camera"></column>
^C_CamConnectOkState = 5
\\\<column name="C_CamConnectFailState" summary="Used to store 'Fail' StateID of camera"></column>
^C_CamConnectFailState = 6
\\\</array>

\\\Control Variables 
\\\<!--<variable alias="" name="" summary=""></variable>-->
\\\<variable alias="Maximum Duration" name="C(^C_MaxDuration)" summary="Maximum time before automatic termination"></variable>
Var_Alias Maximum Time (minutes)					= C(0)
\\\<variable alias="Reward Licks Count" name="C(^C_RewardLicks)" summary="How many licks are permitted for reward"></variable>
Var_Alias Reward Lick Count							= C(2)
\\\<variable alias="Maximum same-lever presses" name="C(^C_MaxSubsequentPresses)" summary="Maximum number of subsequent lever presses on same lever which will be rewarded"></variable>
Var_Alias Maximum same-lever presses				= C(3)


\\\Example comment line <!--<constant represents="input|output|other" name="LeverTrigger" summary="Input ID of the fixed lever 'starting' trigger"></constant>-->

\\\Constant block
\\\<input name="Inp_HeadEntry" summary="Input ID of the head entry unit on pellet dispenser"></input>
^Inp_HeadEntry = 1
\\\<input name="Inp_Lickometer" summary="Input ID of the lickometer"></input>
^Inp_Lickometer = 2
\\\<input name="Inp_LeverTrigger" summary="Input ID of the fixed lever 'starting' trigger"></input>
^Inp_LeverTrigger = 3
\\\<input name="Inp_LeverInputLeft" summary="Input ID of retractable lever on the left"></input>
^Inp_LeverInputLeft = 4
\\\<input name="Inp_LeverInputRight" summary="Input ID of retractable lever on the right"></input>
^Inp_LeverInputRight = 5
\\\<input name="Inp_UltrasonicA" summary="Input ID of ultrasonic input 1 of 2"></input>
^Inp_UltrasonicA = 6
\\\<input name="Inp_UltrasonicB" summary="Input ID of ultrasonic input 2 of 2"></input>
^Inp_UltrasonicB = 7

\\\<output name="Out_PelletDispenser" summary="Output ID of feeder unit."><use>Dispenses on OFF->ON transition</use></output>
^Out_PelletDispenser = 1
\\\<output name="Out_LiquidDispenser" summary="Output ID of drinking unit."><use>Toggle liquid availability: OFF->Unavailable, ON->Available</use></output>
^Out_LiquidDispenser = 2
\\\<output name="Out_LeftLeverRetract" summary="Output trigger to extend/retract left lever"><use>Toggle extended state of lever; OFF->Not extended, ON->Extended</use></output>
^Out_LeftLeverRetract = 3
\\\<output name="Out_RightLeverRetract" summary="Output trigger to extend/retract right lever"><use>Toggle extended state of lever; OFF->Not extended, ON->Extended</use></output>
^Out_RightLeverRetract = 4
\\\<output name="Out_LickShockSwitch" summary="Output ID of ENV-250A Contact Lickometer switching unit."><use>OFF->Lickometer active, ON->Floor connected to shock emitter</use></output>
^Out_LickShockSwitch = 5
\\\<output name="Out_Ultrasonic" summary="Output ID of ultrasonic recording unit."><use>???</use></output>
^Out_Ultrasonic = 6
\\\<output name="Out_ShockEmitter" summary="Output ID of shock unit."><use>Toggle shock delivery: OFF->No shock presently being delivered, ON->CONTINUOUS SHOCK PRESENTLY BEING DELIVERED</use></output>
^Out_ShockEmitter = 7
\\\<output name="Out_HouseLightRear" summary="Output ID of rear-most house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightRear = 9
\\\<output name="Out_HouseLightMid" summary="Output ID of miidle house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightMid = 10
\\\<output name="Out_HouseLightFront" summary="Output ID of front-most house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightFront = 11
\\\<output name="Out_LedRed" summary="Output ID of Red LED (rearmost)."><use>OFF->unlit, ON->lit</use></output>
^Out_LedRed = 12
\\\<output name="Out_LedGreen" summary="Output ID of Green LED (frontmost)."><use>OFF->unlit, ON->lit</use></output>
^Out_LedGreen = 13
\\\<output name="Out_LedYellow" summary="Output ID of Yellow LED (middle)."><use>OFF->unlit, ON->lit</use></output>
^Out_LedYellow = 14

\\\<constant group="z-pulse" represents="parameter" name="ZP_ExtendSipper" summary="Trigger extend sipper; set S for max # of sips before retraction"></constant>
^ZP_ExtendSipper = 1
\\\<constant group="z-pulse" represents="parameter" name="ZP_SipperLimitHit" summary="Triggers when the sipper limit is hit; if S less than 0 then never triggered."></constant>
^ZP_SipperLimitHit = 2
\\\<constant group="z-pulse" represents="parameter" name="ZP_RetractSipper" summary="Trigger sipper retract, regardless of whether sipper limit hit"></constant>
^ZP_RetractSipper = 3

\\\<constant group="z-pulse" represents="parameter" name="ZP_TerminateExperiment" summary="End the experiment - may be used if error occurrs"></constant>
^ZP_TerminateExperiment = 4
\\\<constant group="z-pulse" represents="parameter" name="ZP_ExperimentEnd" summary="Trigged to end the experiment"></constant>
^ZP_ExperimentEnd = 14
\\\<constant group="k-pulse" represents="parameter" name="KP_ExperimentEnd" summary="Trigger the experiment to end"></constant>
^KP_ExperimentEnd = 1


\\\<constant group="z-pulse" represents="parameter" name="ZP_HouseLightsOn" summary="Turn on house lights"></constant>
^ZP_HouseLightsOn = 5
\\\<constant group="z-pulse" represents="parameter" name="ZP_HouseLightsOff" summary="Turn off house lights"></constant>
^ZP_HouseLightsOff = 6
\\\<constant group="z-pulse" represents="parameter" name="ZP_StimLightsOn" summary="Turns on all stimulus lights"></constant>
^ZP_StimLightsOn = 7
\\\<constant group="z-pulse" represents="parameter" name="ZP_StimLightsMid" summary="Switch on only middle stim light on"></constant>
^ZP_StimLightsMid = 8
\\\<constant group="z-pulse" represents="parameter" name="ZP_StimLightsOff" summary="Switch off all stim lights"></constant>
^ZP_StimLightsOff = 9


\\\<constant group="z-pulse" represents="parameter" name="ZP_ExtendLeverSingle" summary="Extend single lever determined by A(^A_CurrentLever)"></constant>
^ZP_ExtendLeverSingle = 10
\\\<constant group="z-pulse" represents="parameter" name="ZP_ExtendLeverAll" summary="Extend all levers"></constant>
^ZP_ExtendLeverAll = 11
\\\<constant group="z-pulse" represents="parameter" name="ZP_RetractLeverAll" summary="Retract all levers"></constant>
^ZP_RetractLeverAll = 12

\\\ARRAYS
\\\<array name="A" outputName="Trial overview" summary="Trial summary data">
DIM A = 9
\\\<column name="A_CompletedTrials" outputName="Total trials" summary="The number of trials that have already been completed"></column>
^A_CompletedTrials = 0
\\\<column name="A_CurrentHours" outputName="Hours" summary="Hours since commencement (for H:M:S.MS)"></column>
^A_CurrentHours = 1
\\\<column name="A_CurrentMinutes" outputName="Minutes" summary="Minutes since commencement (for H:M:S.MS)"></column>
^A_CurrentMinutes = 2
\\\<column name="A_CurrentSeconds" outputName="Seconds" summary="Seconds since commencement (for H:M:S.MS)"></column>
^A_CurrentSeconds = 3
\\\<column name="A_CurrentMilliseconds" outputName="Milliseconds" summary="Milliseconds since commencement (for H:M:S.MS)"></column>
^A_CurrentMilliseconds = 4
\\\<column name="A_LastLeverPressed" summary="ID of the lever most recently pressed"></column>
^A_LastLeverPressed = 5
\\\<column name="A_TimesLeverPressed" summary="Number of times the same lever has been pressed in a row"></column>
^A_TimesLeverPressed = 6
\\\<column name="A_CurrentLever" summary="Not used - present for compatibility"></column>
^A_CurrentLever = 7
\\\<column name="A_SuccessfulTrials" outputName="Successful Trials" summary="The number of trials which gathered rewards"></column>
^A_SuccessfulTrials = 8
\\\<column name="A_TotalIrrelevantPresses" outputName="Irrelevant Presses" summary="Total number of presses while liquid has been available"></column>
^A_TotalIrrelevantPresses = 9
\\\</array>

\\\<array name="B" outputName="Trials" summary="Specific trial data">
DIM B = 80000 \ we wish it could be (^Gen_MaxTrials * B_TrialIndexMultiplier) - 1
\\\<column name="B_TrialNumber" outputName="Trial" summary="Number of this trial"></column>
^B_TrialNumber = 0
\\\<column name="B_TrialTimeHour" outputName="Hour" summary="Time post-commencement (H) this trial occurred"></column>
^B_TrialTimeHour = 1
\\\<column name="B_TrialTimeMinute" outputName="Minute" summary="Time post-commencement (M) this trial occurred"></column>
^B_TrialTimeMinute = 2
\\\<column name="B_TrialTimeSecond" outputName="Second" summary="Time post-commencement (S) this trial occurred"></column>
^B_TrialTimeSecond = 3
\\\<column name="B_TrialTimeMillisecond" outputName="Millisecond" summary="Time post-commencement (MS) this trial occurred"></column>
^B_TrialTimeMillisecond = 4
\\\<column name="B_TrialMsec" outputName="Msec from start" summary="Time post-commencement (msec) this trial occurred TOTAL - Not related to H:M:S"></column>
^B_TrialMsec = 5
\\\<column name="B_PressedLever" outputName="Lever pressed (0=Left  1=Right  2=Centre)" summary="Which lever was pressed"></column>
^B_PressedLever = 6
\\\<column name="B_RewardGiven" outputName="Rewarded?" summary="Whether reward was given (0=No  1=Yes) (not given if >2 hits on same lever)"></column>
^B_RewardGiven = 7
\\\<column name="B_LickDelay" outputName="Lick Delay" summary="Time (in msec) before lick count was reached"></column>
^B_LickDelay = 8
\\\<column name="B_LickCount" outputName="Lick Count" summary="Number of licks taken"></column>
^B_LickCount = 9
\\\<column name="B_FirstLickDelay" outputName="First-lick Delay" summary="Time (in msec) before first lick; -1 = NA"></column>
^B_FirstLickDelay = 10
\\\<column name="B_IrrelevantLeverPresses" outputName="Irrelevant press count" summary="Number of times other levers are pressed before full number of sips is taken"></column>
^B_IrrelevantLeverPresses = 11
\\\</array>
\\\<constant group="general" represents="parameter" name="B_TrialIndexMultiplier" summary="Multiplier to be used for each trial"></constant>
^B_TrialIndexMultiplier = 12


\\\Variable declarations
\\\<!--<variable name="" summary=""></variable>-->
\\\<variable name="O" summary="Camera status"></variable>
\\\<variable name="Q" summary="Current offset for B array"></variable>
\\\<variable name="R" summary="Inter-trial pause (generated)"></variable>
\\\<variable name="S" summary="Number of sips remaining before sipper retract - set before using ZP_ExtendSipper"></variable>
\\\<variable name="T" summary="Timer - # of msec since commencement"></variable>
\\\<variable name="U" summary="Timer - variable swapping 1"></variable>
\\\<variable name="W" summary="Timer - variable swapping 2"></variable>

\\\<stateset id="1" summary="Run the preparation and termination functions of the program">
S.S.1,
\\\<state id="1" summary="Set variables to default values">
S1,
	0":;
		SET C(^C_MaxDuration) = ^Def_MaxDuration;
		SET C(^C_RewardLicks) = ^Def_RewardLicks;
		SET C(^C_MaxSubsequentPresses) = ^Def_MaxSubsequentPresses;
		~C[4] := UNCONNECTED;
        C[5] := CONNECT_OK;
        C[6] := CONNECT_FAIL;~;
		---> S5
\\\</state>
\\\<state id="5" summary="Pause until start command is issued; Update displayed variables.">
S5,
	#START:;
		~ IF ((box = 1) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX1', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 2) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX2', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 3) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX3', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 4) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX4', StartSavingEvent, 'StartEvent'); end; ~;
		---> S10
	0.01":;
		SHOW 1, Max Duration, C(^C_MaxDuration);
		SHOW 2, Time Remaining, C(^C_MaxDuration);
		SHOW 3, Completed Trials, 0;
		SHOW 4, Rewarded Trials, 0;
		SHOW 5, Awaiting start, 0;
		SHOW 11, Max sequential presses, C(^C_MaxSubsequentPresses); 
		SHOW 12, Reward licks, C(^C_RewardLicks); 
		~ IF ((box = 1) and (O <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX1'); O := GetIfaceStatus();end;~;
		~ IF ((box = 2) and (O <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX2'); O := GetIfaceStatus();end;~;
		~ IF ((box = 3) and (O <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX3'); O := GetIfaceStatus();end;~;
		~ IF ((box = 4) and (O <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX4'); O := GetIfaceStatus();end;~;
		SET C(^C_MaxDurationMsec) = C(^C_MaxDuration) * 60000; \convert minutes to milliseconds
		---> SX
\\\</state>
\\\<state id="10" summary="Wait for program termination">
S10,
	#Z^ZP_TerminateExperiment:;
		SHOW 5, Finished, 2;
		~ IF ((box = 1) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX1', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 2) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX2', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 3) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX3', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 4) and (O = CONNECT_OK)) then begin WriteEventVM('.', 'BOX4', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 1) and (O <> CONNECT_OK)) then begin DisconnectVM('.', 'BOX1'); O := GetIfaceStatus();end;~;
		~ IF ((box = 2) and (O <> CONNECT_OK)) then begin DisconnectVM('.', 'BOX2'); O := GetIfaceStatus();end;~;
		~ IF ((box = 3) and (O <> CONNECT_OK)) then begin DisconnectVM('.', 'BOX3'); O := GetIfaceStatus();end;~;
		~ IF ((box = 4) and (O <> CONNECT_OK)) then begin DisconnectVM('.', 'BOX4'); O := GetIfaceStatus();end;~;
		SET B(Q + ^B_TrialIndexMultiplier + ^B_TrialNumber) = -987.987;
		---> S20

\\\</state>
\\\<state id="10" summary="Turn off all outputs, save data and end">
S20,   
  0.1":;
  	---> STOPABORTFLUSH
\\\</state>
\\\</stateset>


\\\<stateset id="2" summary="Operate the experiment functionally">
S.S.2,
\\\<state id="1" summary="Wait for the start trigger">
S1,
	#START:;
		Z^ZP_HouseLightsOn;
		Z^ZP_ExtendLeverAll;
		---> S3
\\\</state>
\\\<state id="3" summary="Update trial data, reset stimulus lights">
S3,
  #Z^ZP_ExperimentEnd:; \\duration of experiment reached - issue termination and stop
		Z^ZP_TerminateExperiment;
		---> S32
	0":;
		SHOW 5, Running, 1;
		Z^ZP_StimLightsOn;
			---> S5

\\\</state>
\\\<state id="5" summary="Wait for correct lever press">
S5,
  #Z^ZP_ExperimentEnd:; \\duration of experiment reached - issue termination and stop
		Z^ZP_TerminateExperiment;
		---> S32
  #R^Inp_LeverTrigger:;
	IF A(^A_LastLeverPressed) = ^Lever_CentreLever [@hit same lever as previous, @hit different lever]
		@hit same lever:; \\check if already hit this lever maximum subsequent times
			ADD A(^A_TimesLeverPressed);
			SHOW 6, Centre Lever Pressed, A(^A_TimesLeverPressed);
			IF A(^A_TimesLeverPressed) > C(^C_MaxSubsequentPresses) [@no reward, @reward]
				@no reward:;
					---> S9
				@reward:;
					---> S6
		@hit different lever:;
			SET A(^A_TimesLeverPressed) = 1;
			SHOW 6, Centre Lever Pressed, A(^A_TimesLeverPressed);
			SET A(^A_LastLeverPressed) = ^Lever_CentreLever;
			---> S6

	#R^Inp_LeverInputLeft:;
	IF A(^A_LastLeverPressed) = ^Lever_LeftLever [@hit same lever as previous, @hit different lever]
	@hit same lever:; \\check if already hit this lever maximum subsequent times
		ADD A(^A_TimesLeverPressed);
		SHOW 6, Left Lever Pressed, A(^A_TimesLeverPressed);
		IF A(^A_TimesLeverPressed) > C(^C_MaxSubsequentPresses) [@no reward, @reward]
			@no reward:;
				---> S9
			@reward:;
				---> S6
	@hit different lever:;
		SET A(^A_TimesLeverPressed) = 1;
		SHOW 6, Left Lever Pressed, A(^A_TimesLeverPressed);
		SET A(^A_LastLeverPressed) = ^Lever_LeftLever;
		---> S6

	#R^Inp_LeverInputRight:;
	IF A(^A_LastLeverPressed) = ^Lever_RightLever [@hit same lever as previous, @hit different lever]
	@hit same lever:; \\check if already hit this lever maximum subsequent times
		ADD A(^A_TimesLeverPressed);
		SHOW 6, Right Lever Pressed, A(^A_TimesLeverPressed);
		IF A(^A_TimesLeverPressed) > C(^C_MaxSubsequentPresses) [@no reward, @reward]
			@no reward:;
				---> S9
			@reward:;
				---> S6
	@hit different lever:;
		SET A(^A_TimesLeverPressed) = 1;
		SHOW 6, Right Lever Pressed, A(^A_TimesLeverPressed);
		SET A(^A_LastLeverPressed) = ^Lever_RightLever;
		---> S6
\\\</state>
\\\<state id="6" summary="Record press; Turn off left and right stim lights; give reward">
S6,
	0":;
		SHOW 7, Reward given, 1;
		ADD A(^A_SuccessfulTrials);
		SET Q = A(^A_CompletedTrials) * ^B_TrialIndexMultiplier;
		SET B(Q + ^B_TrialNumber) = A(^A_CompletedTrials);
		SET B(Q + ^B_TrialTimeHour) = A(^A_CurrentHours), B(Q + ^B_TrialTimeMinute) = A(^A_CurrentMinutes), B(Q + ^B_TrialTimeSecond) = A(^A_CurrentSeconds), B(Q + ^B_TrialTimeMillisecond) = A(^A_CurrentMilliseconds);
		SET B(Q + ^B_TrialMsec) = T;
		SET B(Q + ^B_PressedLever) = A(^A_LastLeverPressed);
		SET B(Q + ^B_RewardGiven) = 1;
		Z^ZP_StimLightsMid;
		SET S = C(^C_RewardLicks);
		Z^ZP_ExtendSipper;
		SHOW 30, Jump to state, 7;
		---> S7
\\\</state>
\\\<state id="7" summary="Wait until lick count has his the value of S - i.e. ZP_SipperLimitHit">
S7,
	#Z^ZP_SipperLimitHit:;
		SET B(Q + ^B_LickDelay) = T - B(Q + ^B_TrialMsec); \record how long it took before the rat reached the number of licks
		Z^ZP_StimLightsOff;
		SHOW 30, Jump to state, 31;
		---> S31
  #R^Inp_LeverTrigger:;
		ADD B(Q + ^B_IrrelevantLeverPresses);
		ADD A(^A_TotalIrrelevantPresses);
		SHOW 36, Irrelevant Presses, A(^A_TotalIrrelevantPresses);
		SHOW 41 + (A(^A_SuccessfulTrials) * 2), Trial, A(^A_SuccessfulTrials);
		SHOW 42 + (A(^A_SuccessfulTrials) * 2), Irrelevant Presses, B(Q + ^B_IrrelevantLeverPresses);
		---> SX
  #R^Inp_LeverInputLeft:;
		ADD B(Q + ^B_IrrelevantLeverPresses);
		ADD A(^A_TotalIrrelevantPresses);
		SHOW 36, Irrelevant Presses, A(^A_TotalIrrelevantPresses);
		SHOW 41 + (A(^A_SuccessfulTrials) * 2), Trial, A(^A_SuccessfulTrials);
		SHOW 42 + (A(^A_SuccessfulTrials) * 2), Irrelevant Presses, B(Q + ^B_IrrelevantLeverPresses);
		---> SX
  #R^Inp_LeverInputRight:;
		ADD B(Q + ^B_IrrelevantLeverPresses);
		ADD A(^A_TotalIrrelevantPresses);
		SHOW 36, Irrelevant Presses, A(^A_TotalIrrelevantPresses);
		SHOW 41 + (A(^A_SuccessfulTrials) * 2), Trial, A(^A_SuccessfulTrials);
		SHOW 42 + (A(^A_SuccessfulTrials) * 2), Irrelevant Presses, B(Q + ^B_IrrelevantLeverPresses);
		---> SX
\\\</state>
\\\<state id="6" summary="Record press; Turn off left and right stim lights; retract all levers">
S9,
	0":;
		SHOW 7, No reward given, 0;
		SET Q = A(^A_CompletedTrials) * ^B_TrialIndexMultiplier;
		SET B(Q + ^B_TrialNumber) = A(^A_CompletedTrials);
		SET B(Q + ^B_TrialTimeHour) = A(^A_CurrentHours), B(Q + ^B_TrialTimeMinute) = A(^A_CurrentMinutes), B(Q + ^B_TrialTimeSecond) = A(^A_CurrentSeconds), B(Q + ^B_TrialTimeMillisecond) = A(^A_CurrentMilliseconds);
		SET B(Q + ^B_TrialMsec) = T;
		SET B(Q + ^B_PressedLever) = A(^A_LastLeverPressed);
		SET B(Q + ^B_RewardGiven) = 0;
		Z^ZP_StimLightsOff;
		SHOW 30, Jump to state, 31;
		---> S31
\\\</state>
\\\<state id="31" summary="Check if full number of trials have been completed, and if so issue terminate command.">
S31,
	0":;
		ADD A(^A_CompletedTrials);
		SHOW 3, Completed Trials, A(^A_CompletedTrials);
		SHOW 4, Rewarded Trials, A(^A_SuccessfulTrials);
		SHOW 36, Irrelevant Presses, A(^A_TotalIrrelevantPresses);
		SHOW 41 + (A(^A_SuccessfulTrials) * 2), Trial, A(^A_SuccessfulTrials);
		SHOW 42 + (A(^A_SuccessfulTrials) * 2), Irrelevant Presses, B(Q + ^B_IrrelevantLeverPresses);
		SHOW 30, Jump to state, 3;
		---> S3
\\\</state>
\\\</stateset>



\\\<stateset id="3" summary="Operate the sipper">
S.S.3,
\\\<state id="1" summary="Wait for sipper extend (ZP_ExtendSipper) to be triggered">
S1,
	#Z^ZP_ExtendSipper:;
		OFF ^Out_LickShockSwitch; \precautionary; should already be off.
		ON ^Out_LiquidDispenser;
		IF S <= 0 [@no sip limit, @sip limit]
			@no sip limit:;
				---> S3
			@sip limit:;
				---> S5
\\\</state>
\\\<state id="3" summary="Extend sipper until ZP_RetractSipper occurs">
S3,
	#Z^ZP_RetractSipper:;
		OFF ^Out_LiquidDispenser;
		---> S1
\\\</state>
\\\<state id="5" summary="Extend sipper until ZP_RetractSipper occurs or max sips hit">
S5,
	#Z^ZP_RetractSipper:;
		OFF ^Out_LiquidDispenser;
		---> S1
	S#R^Inp_Lickometer:;
		Z^ZP_SipperLimitHit;
		OFF ^Out_LiquidDispenser;
		---> S1
\\\</state>
\\\</stateset>

\\\<stateset id="4" summary="Count sips and add to each trial">
S.S.4,
\\\<state id="1" summary="Wait for sipper extend (ZP_ExtendSipper) to be triggered">
S1,
	#Z^ZP_ExtendSipper:; \when sipper extended, start counting
				---> S2
\\\</state>
\\\<state id="2" summary="Count number of sips until retraction occurs or sipper limit hit">
S2,
	#R^Inp_Lickometer:;
		ADD B(Q + ^B_LickCount);
		IF B(Q + ^B_LickCount) = 1 [@first lick]
			@first lick:;
				SET B(Q + ^B_FirstLickDelay) = T - B(Q + ^B_TrialMsec); 
				---> SX
	#Z^ZP_RetractSipper:;
		---> S1
	#Z^ZP_SipperLimitHit:;
		---> S1
\\\</state>
\\\</stateset>

\\\<stateset id="5" summary="Control house light system">
S.S.5,
\\\<state id="1" summary="Wait for lighting change command">
S1,
	#Z^ZP_HouseLightsOn:; \if split, then could be problems due to temporal precision
		IF ^Lights_UseHouseRear = 1 [@switch on rear light, @do not switch on rear light]
			@switch on rear light:;
				ON ^Out_HouseLightRear;
				IF ^Lights_UseHouseMid = 1 [@switch on mid light, @do not switch on mid light]
					@switch on mid light:;
						ON ^Out_HouseLightMid;
						IF ^Lights_UseHouseFront = 1 [@switch on front light]
							@switch on front light:;
								ON ^Out_HouseLightFront;
									---> SX
					@do not switch on mid light:;
						IF ^Lights_UseHouseFront = 1 [@switch on front light]
							@switch on front light:;
								ON ^Out_HouseLightFront;
									---> SX
			@do not switch on rear light:;
					IF ^Lights_UseHouseMid = 1 [@switch on mid light, @do not switch on mid light]
					@switch on mid light:;
						ON ^Out_HouseLightMid;
						IF ^Lights_UseHouseFront = 1 [@switch on front light]
							@switch on front light:;
								ON ^Out_HouseLightFront;
									---> SX
					@do not switch on mid light:;
						IF ^Lights_UseHouseFront = 1 [@switch on front light]
							@switch on front light:;
								ON ^Out_HouseLightFront;
									---> SX
	#Z^ZP_HouseLightsOff:; 
		OFF ^Out_HouseLightRear;
		OFF ^Out_HouseLightMid;
		OFF ^Out_HouseLightFront;
		---> SX
	#Z^ZP_TerminateExperiment:;
		---> S32
\\\</state>
\\\</stateset>

\\\<stateset id="6" summary="Control stimulus light system">
S.S.6,
\\\<state id="1" summary="Wait for lighting change command">
S1,
	#Z^ZP_StimLightsOn:; 
		ON ^Out_LedRed;
		ON ^Out_LedGreen;
		ON ^Out_LedYellow;
		---> SX
	#Z^ZP_StimLightsOff:; 
		OFF ^Out_LedRed;
		OFF ^Out_LedGreen;
		OFF ^Out_LedYellow;
		---> SX
	#Z^ZP_StimLightsMid:; 
		OFF ^Out_LedRed;
		OFF ^Out_LedGreen;
		ON ^Out_LedYellow;
		---> SX
	#Z^ZP_TerminateExperiment:;
		---> S32
\\\</state>
\\\</stateset>

\\\<stateset id="7" summary="Timer - counts up in msec (in steps of 10 msec)">
S.S.7,
\\\<state id="1" summary="Wait for start trigger">
S1,
	#START:;
		---> S2
\\\<state id="2" summary="Increment counter, hour, minutes, seconds, milliseconds">
\\\</state>
S2,
	0.01":;
		SET T = T + 10;
		SET A(^A_CurrentMilliseconds) = A(^A_CurrentMilliseconds) + 10;
		SET U = A(^A_CurrentMilliseconds), W = A(^A_CurrentSeconds);
		~ IF (U = 1000) then begin U := 0; W := W + 1; end; ~;
		SET A(^A_CurrentMilliseconds) = U, U = W, W = A(^A_CurrentMinutes);
		~ IF (U = 60) then begin U := 0; W := W + 1; end; ~;
		SET A(^A_CurrentSeconds) = U, U = W, W = A(^A_CurrentHours);
		~ IF (U = 60) then begin U := 0; W := W + 1; end; ~;
		SET A(^A_CurrentMinutes) = U, A(^A_CurrentHours) = W;
		SHOW 20, Hours, A(^A_CurrentHours);
		SHOW 21, Minutes, A(^A_CurrentMinutes);
		SHOW 22, Seconds, A(^A_CurrentSeconds);
		SHOW 23, Milliseconds, A(^A_CurrentMilliseconds);

			---> SX
	#Z^ZP_TerminateExperiment:;
		---> S32
\\\</state>
\\\</stateset>

\\\<stateset id="8" summary="Control lever extensions">
S.S.8,
\\\<state id="1" summary="Wait for lighting change command">
S1,
	#Z^ZP_ExtendLeverSingle:;
		\SHOW 13, Extend single levers issued, T;
		IF A(^A_CurrentLever) = ^Lever_LeftLever [@extend left lever, @not left lever]
			@extend left lever:;
				ON ^Out_LeftLeverRetract;
				---> SX
			@not left lever:;
				IF A(^A_CurrentLever) = ^Lever_RightLever [@extend right lever]
					@extend right lever:;
						ON ^Out_RightLeverRetract;
						---> SX
	#Z^ZP_ExtendLeverAll:;
		\SHOW 13, Extend all levers issued, T;
		ON ^Out_LeftLeverRetract;
		ON ^Out_RightLeverRetract;
		---> SX
	#Z^ZP_RetractLeverAll:;
		\SHOW 13, Retract all levers issued, T;
		OFF ^Out_LeftLeverRetract;
		OFF ^Out_RightLeverRetract;
		---> SX
	#Z^ZP_TerminateExperiment:;
		OFF ^Out_LeftLeverRetract;
		OFF ^Out_RightLeverRetract;
		---> S32
\\\</state>
\\\</stateset>

\\\<stateset id="9" summary="Experiment timer - check if experiment has reached maximum duration">
S.S.9,
\\\<state id="1" summary="Wait for start trigger">
S1,
	#START:;
		---> S2
\\\<state id="2" summary="Every cycle, check if max duration of experiment reached">
\\\</state>
S2,
	#K^KP_ExperimentEnd:;
				SHOW 5, Manually terminated, 0;
				---> S3
	0.01":;
		SHOW 2, Remaining Time (m.s), ((C(^C_MaxDuration) - (A(^A_CurrentHours) * 60) - A(^A_CurrentMinutes)) - ((A(^A_CurrentSeconds) + 40) / 100));
		IF T >= C(^C_MaxDurationMsec) [@hit max time]
			@hit max time:;
				SHOW 2, Max Time Reached, 0;
				---> S3
\\\</state>
\\\<state id="3" summary="Trigger a ZP_ExperimentEnd every 10ms - this will make sure that everything receives it even">
S3,
	0.01":;
		Z^ZP_ExperimentEnd;
		---> SX
\\\</state>
\\\</stateset>


S.S.20,
S1,
	0.01":;
		IF (O = C(^C_CamUnconnectedState)) [@UNCON, @OTHER]
			 @UNCON: SHOW 14, Video Unconnected,0 ---> S1
             @OTHER: IF (O = C(^C_CamConnectOkState)) [@CONNECTED, @OTHER2]
                @CONNECTED: SHOW 14, Video OK,0 ---> S1
                @OTHER2: IF (O = C(^C_CamConnectFailState)) [@FAIL, @OTHER3]
                   @FAIL:   SHOW 14, Video Failed,0 ---> S1
                   @OTHER3: SHOW 14, Video Unknown,0  ---> S1

\\\</program>
