\\\<?xml version="1.0" encoding="utf-8" standalone="yes"?>
\\\<?xml-stylesheet type="text/xsl" href="comments.xsl"?>
\\\
\\\<program>
\\\<title>Fear Conditioning - 10s continuous stimulation presentation with acoustic & electrical support</title>
\\\<history>
\\\ <revision number="1.0">
\\\  <author>Simeon Morgan &lt;s.morgan@latrobe.edu.au&gt;</author>
\\\  <created>2009-08-04 17:54</created>
\\\  <summary>First version</summary>
\\\ </revision>
\\\</history>

Y2KCOMPLIANT \\\Force use of 4-digit year


\\\<constant group="general" represents="parameter" name="Def_MaxBlocksAcoustic" summary="Default maximum number of blocks to be recorded/processed for acoustic stim"></constant>
^Def_MaxBlocksAcoustic = 12
\\\<constant group="general" represents="parameter" name="Def_TrialsPerBlockAcoustic" summary="Default maximum number of trials for each block for acoustic stim"></constant>
^Def_TrialsPerBlockAcoustic = 4
\\\<constant group="general" represents="parameter" name="Def_MaxBlocksElectric" summary="Default maximum number of blocks to be recorded/processed for electrical stim"></constant>
^Def_MaxBlocksElectric = 6
\\\<constant group="general" represents="parameter" name="Def_TrialsPerBlockElectric" summary="Default number of trials for each block for electrical stim"></constant>
^Def_TrialsPerBlockElectric = 8
\\\<constant group="general" represents="parameter" name="Def_TrialDuration" summary="Duration of a single trial in sec"></constant>
^Def_TrialDuration = 10
\\\<constant group="general" represents="parameter" name="Abs_MaxTrials" summary="Limit on maximum number of trials to be recorded/processed"></constant>
^Abs_MaxTrials = 10000
\\\<constant group="general" represents="parameter" name="Def_MinITI" summary="Default minimum Inter-trial interval (in sec)"></constant>
^Def_MinITI = 90
\\\<constant group="general" represents="parameter" name="Def_MaxITI" summary="Default maximum Inter-trial interval (in sec)"></constant>
^Def_MaxITI = 180
\\\<constant group="general" represents="parameter" name="Def_TrialsType" summary="Default trials type (0=acoustic, 1=electrical, 2=random)"></constant>
^Def_TrialsType = 0

\\\<array name="G" outputName="Configuration" summary="">
DIM G = 20
\\\<column name="G_MaxBlocks" outputName="Max Blocks" summary="Number of blocks before automatic termination"></column>
^G_MaxBlocks = 0
\\\<column name="G_MaxTrials" outputName="Max Trials" summary="Number of trials before automatic termination"></column>
^G_MaxTrials = 1
\\\<column name="G_TrialsType" outputName="Trials type" summary="Type of trials to present (0=acoustic, 1=electrical, 2=random)"></column>
^G_TrialsType = 2
\\\<column name="G_ToneDurationSec" outputName="Tone duration" summary="Duration of tone presentation in seconds"></column>
^G_ToneDurationSec = 3
\\\<column name="G_InterToneIntervalSec" outputName="Inter-tone interval" summary="Time between tone presentations"></column>
^G_InterToneIntervalSec = 4
\\\<column name="G_TrialDurationSec" outputName="Trial duration" summary="Duration of trial in seconds"></column>
^G_TrialDurationSec = 5
\\\<column name="G_MinITI" outputName="Min ITI" summary="Minimum inter-trial interval (in sec)"></column>
^G_MinITI = 6
\\\<column name="G_MaxITI" outputName="Max ITI" summary="Maximum inter-trial interval (in sec)"></column>
^G_MaxITI = 7
\\\<column name="G_TrialDuration" summary="Duration of trial (in ticks - autogenerated)"></column>
^G_TrialDuration = 8
\\\<column name="G_CamUnconnectedState" summary="Used to store 'Unconnected' StateID of camera"></column>
^G_CamUnconnectedState = 9
\\\<column name="G_CamConnectOkState" summary="Used to store 'Ok' StateID of camera"></column>
^G_CamConnectOkState = 10
\\\<column name="G_CamConnectFailState" summary="Used to store 'Fail' StateID of camera"></column>
^G_CamConnectFailState = 11
\\\<column name="G_UltrasonicIndexOffset" summary="Array offset for ultrasonic time recording"></column>
^G_UltrasonicIndexOffset = 12
\\\<column name="G_USSequentialReadingA" summary="Number of sequential ultrasonic detections A"></column>
^G_USSequentialReadingsA = 13
\\\<column name="G_USEventIndexA" summary="Index of current event for ultrasonic A"></column>
^G_USEventIndexA = 14
\\\<column name="G_USSequentialReadingB" summary="Number of sequential ultrasonic detections B"></column>
^G_USSequentialReadingsB = 15
\\\<column name="G_USEventIndexB" summary="Index of current event for ultrasonic B"></column>
^G_USEventIndexB = 16
\\\<column name="G_ToneDurationTicks" outputName="Tone duration" summary="Duration of tone presentation in ticks"></column>
^G_ToneDurationTicks = 17
\\\<column name="G_InterToneIntervalTicks" outputName="Inter-tone interval" summary="Time between tone presentations"></column>
^G_InterToneIntervalTicks = 18
\\\<column name="G_ThisInterTrialIntervalTicks" summary="This single inter-trial interval in ticks"></column>
^G_ThisInterTrialIntervalTicks = 19
\\\<column name="G_PadTime" summary="Time in ticks to pad trial to ensure tone synchronisation"></column>
^G_PadTime = 20
\\\</array>

\\\<enum name="G_TrialType" summary="Identifiers for trial types">
\\\\<option value="0" name="^G_TrialType_Acoustic" summary="Acoustic trial"></option>
^G_TrialType_Acoustic = 0
\\\\<option value="1" name="^G_TrialType_Electrical" summary="Electrical trial"></option>
^G_TrialType_Electrical = 1
\\\</enum>


\\\Control Variables 
\\\<!--<variable alias="" name="" summary=""></variable>-->
\\\<variable alias="Maximum Trials" name="G(^G_MaxBlocks)" summary="Number of blocks before automatic termination"></variable>
Var_Alias Maximum Blocks (Maximum 100)	= G(0)
\\\<variable alias="Trial type" name="G(^G_TrialsType)" summary="Type of trials (0=acoustic, 1=electrical)">"></variable>
Var_Alias Trial type (0=acoustic 1=electrical)	= G(2)
\\\<variable alias="Tone Duration" name="G(^G_ToneDurationSec)" summary="Duration (in seconds) of presented tone stimulus"></variable>
Var_Alias Tone Duration (sec)				= G(3)
\\\<variable alias="Intertone Duration" name="G(^G_InterToneTIntervalSec)" summary="Duration (in seconds) between tone stimulus"></variable>
Var_Alias Intertone Duration (sec)				= G(4)
\\\<variable alias="Minimum Inter-trial Interval (sec)" name="G(^G_MinITI)" summary="Minimum inter-trial interval (in sec)"></variable>
Var_Alias Minimum Inter-trial Interval		= G(6)
\\\<variable alias="Maximum Inter-trial Interval (sec)" name="G(^G_MaxITI)" summary="Maximum inter-trial interval (in sec)"></variable>
Var_Alias Maximum Inter-trial Interval		= G(7)


\\\Example comment line <!--<constant represents="input|output|other" name="LeverTrigger" summary="Input ID of the fixed lever 'starting' trigger"></constant>-->

\\\Constant block
\\\<input name="Inp_HeadEntry" summary="Input ID of the head entry unit on pellet dispenser"></input>
^Inp_HeadEntry = 1
\\\<input name="Inp_Lickometer" summary="Input ID of the lickometer"></input>
^Inp_Lickometer = 2
\\\<input name="Inp_LeverTrigger" summary="Input ID of the fixed lever 'starting' trigger"></input>
^Inp_LeverTrigger = 3
\\\<input name="Inp_LeverInputLeft" summary="Input ID of retractable lever on the left"></input>
^Inp_LeverInputLeft = 4
\\\<input name="Inp_LeverInputRight" summary="Input ID of retractable lever on the right"></input>
^Inp_LeverInputRight = 5
\\\<input name="Inp_UltrasonicA" summary="Input ID of ultrasonic input 1 of 2"></input>
^Inp_UltrasonicA = 6
\\\<input name="Inp_UltrasonicB" summary="Input ID of ultrasonic input 2 of 2"></input>
^Inp_UltrasonicB = 7

\\\<output name="Out_SnackDispenser" summary="Output ID of feeder unit."><use>Dispenses on OFF->ON transition</use></output>
^Out_SnackDispenser = 1
\\\<output name="Out_BeverageDispenser" summary="Output ID of drinking unit."><use>Toggle liquid availability: OFF->Unavailable, ON->Available</use></output>
^Out_BeverageDispenser = 2
\\\<output name="Out_LeftLeverRetract" summary="Output trigger to extend/retract left lever"><use>Toggle extended state of lever; OFF->Not extended, ON->Extended</use></output>
^Out_LeftLeverRetract = 3
\\\<output name="Out_RightLeverRetract" summary="Output trigger to extend/retract right lever"><use>Toggle extended state of lever; OFF->Not extended, ON->Extended</use></output>
^Out_RightLeverRetract = 4
\\\<output name="Out_LickShockSwitch" summary="Output ID of ENV-250A Contact Lickometer switching unit."><use>OFF->Lickometer active, ON->Floor connected to shock emitter</use></output>
^Out_LickShockSwitch = 5
\\\<output name="Out_Ultrasonic" summary="Output ID of ultrasonic recording unit."><use>???</use></output>
^Out_Ultrasonic = 6
\\\<output name="Out_ShockEmitter" summary="Output ID of shock unit."><use>Toggle shock delivery: OFF->No shock presently being delivered, ON->CONTINUOUS SHOCK PRESENTLY BEING DELIVERED</use></output>
^Out_ShockEmitter = 7
\\\<output name="Out_HouseLightRear" summary="Output ID of rear-most house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightRear = 9
\\\<output name="Out_HouseLightMid" summary="Output ID of miidle house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightMid = 10
\\\<output name="Out_HouseLightFront" summary="Output ID of front-most house light."><use>OFF->unlit, ON->lit</use></output>
^Out_HouseLightFront = 11
\\\<output name="Out_TDTrial" summary="Output ID for trial running. (ID 8)"><use>OFF->No trial running, ON->Trial running</use></output>
^Out_TDTrial = 13
\\\<output name="Out_TDBlock" summary="Output ID for block running. (ID 16)"><use>OFF->No block running, ON->Block running</use></output>
^Out_TDBlock = 12
\\\<output name="Out_TDStim1" summary="Output ID to trigger presentation of stimulus 1. (ID 1)"><use>OFF->No stim 1, ON->stim 1 playing</use></output>
^Out_TDStim1 = 8
\\\<output name="Out_TDStim2" summary="Output ID to trigger presentation of stimulus 2. (ID 2)"><use>OFF->No stim 2, ON->stim 2 playing</use></output>
^Out_TDStim2 = 15
\\\<output name="Out_TDStimType" summary="Output ID to identify whether acoustic or electrical stim. (ID 4)"><use>OFF->Acoustic stim, ON->Electrical stim</use></output>
^Out_TDStimType = 16


\\\<constant group="audio" represents="parameter" name="Snd_ToneDuration" summary="Duration of presentation of tone stimulus (in ms)"></constant>
^Snd_ToneDuration = 250
\\\<constant group="audio" represents="parameter" name="Snd_InterToneInterval" summary="Time between tone presentations (in ms)"></constant>
^Snd_InterToneInterval = 250
\\\<constant group="audio" represents="parameter" name="Snd_RiseFallTime" summary="Rise/Fall time (in ms)"></constant>
^Snd_RiseFallTime = 10

\\\<constant group="k-pulse" represents="parameter" name="KP_ExperimentEnd" summary="Trigger the experiment to end"></constant>
^KP_ExperimentEnd = 1

\\\<constant group="z-pulse" represents="parameter" name="ZP_TrialStart" summary="Signals commencement of a trial"></constant>
^ZP_TrialStart = 1
\\\<constant group="z-pulse" represents="parameter" name="ZP_TrialEnd" summary="Signals end of a trial"></constant>
^ZP_TrialEnd = 2

\\\<constant group="z-pulse" represents="parameter" name="ZP_TerminateExperiment" summary="End the experiment - may be used if error occurrs"></constant>
^ZP_TerminateExperiment = 3
\\\<constant group="z-pulse" represents="parameter" name="ZP_ExperimentEnd" summary="Trigged to end the experiment"></constant>
^ZP_ExperimentEnd = 4

\\\<constant group="z-pulse" represents="parameter" name="ZP_StartVideoRec" summary="Start video recording"></constant>
^ZP_StartVideoRec = 5
\\\<constant group="z-pulse" represents="parameter" name="ZP_EndVideoRec" summary="End video recording"></constant>
^ZP_EndVideoRec = 6

\\\<constant group="z-pulse" represents="parameter" name="ZP_GenerateNextTrial" summary="Select what type of trial is next"></constant>
^ZP_GenerateNextTrial = 7

\\\<constant group="z-pulse" represents="parameter" name="ZP_StartTimer" summary="Trigger the post-tone pre-press timer"></constant>
^ZP_StartTimer = 8
\\\<constant group="z-pulse" represents="parameter" name="ZP_StopTimer" summary="Stop the post-tone pre-press timer, and write the result to the data array"></constant>
^ZP_StopTimer = 9

\\\<constant group="z-pulse" represents="parameter" name="ZP_ExtendSipper" summary="Trigger extend sipper; set S for max # of sips before retraction"></constant>
^ZP_ExtendSipper = 10
\\\<constant group="z-pulse" represents="parameter" name="ZP_SipperLimitHit" summary="Triggers when the sipper limit is hit; if S less than 0 then never triggered."></constant>
^ZP_SipperLimitHit = 11
\\\<constant group="z-pulse" represents="parameter" name="ZP_RetractSipper" summary="Trigger sipper retract, regardless of whether sipper limit hit"></constant>
^ZP_RetractSipper = 12

\\\<constant group="z-pulse" represents="parameter" name="ZP_StartTimerITI" summary="Trigger the ITI pre-press timer"></constant>
^ZP_StartTimerITI = 13
\\\<constant group="z-pulse" represents="parameter" name="ZP_StopTimer" summary="Stop the ITI pre-press timer, and write the result to the data array"></constant>
^ZP_StopTimerITI = 14

\\\ARRAYS
\\\<array name="J" outputName="Trial summary" summary="Trial summary data">
DIM J = 8
\\\<column name="J_CompletedTrials" outputName="Completed trials" summary="Total number of trials that have occurred so far"></column>
^J_CompletedTrials = 0
\\\<column name="J_RemainInBlock" outputName="Remaining in block" summary="Number of trials remaining in current block"></column>
^J_RemainInBlock = 1
\\\<column name="J_MeanITI" outputName="Mean ITI" summary="Mean Inter-trial interval"></column>
^J_MeanITI = 2
\\\<column name="J_CurrentHours" outputName="Hours" summary="Hours since commencement (for H:M:S.MS)"></column>
^J_CurrentHours = 3
\\\<column name="J_CurrentMinutes" outputName="Minutes" summary="Minutes since commencement (for H:M:S.MS)"></column>
^J_CurrentMinutes = 4
\\\<column name="J_CurrentSeconds" outputName="Seconds" summary="Seconds since commencement (for H:M:S.MS)"></column>
^J_CurrentSeconds = 5
\\\<column name="J_CurrentMilliseconds" outputName="Milliseconds" summary="Milliseconds since commencement (for H:M:S.MS) "></column>
^J_CurrentMilliseconds = 6
\\\</array>

\\\<array name="K" outputName="Trials" summary="Specific trial data">
DIM K = 90000 \ we wish it could be (^Gen_MaxTrials * 6) - 1
\\\<column name="K_TrialNumber" outputName="Trial number" summary="Number of this trial"></column>
^K_TrialNumber = 0
\\\<column name="K_TrialTimeHour" outputName="Hour" summary="Time post-commencement (H) this trial occurred"></column>
^K_TrialTimeHour = 1
\\\<column name="K_TrialTimeMinute" outputName="Minute" summary="Time post-commencement (M) this trial occurred"></column>
^K_TrialTimeMinute = 2
\\\<column name="K_TrialTimeSecond" outputName="Second" summary="Time post-commencement (S) this trial occurred"></column>
^K_TrialTimeSecond = 3
\\\<column name="K_TrialTimeMillisecond" outputName="Millisecond" summary="Time post-commencement (MS) this trial occurred"></column>
^K_TrialTimeMillisecond = 4
\\\<column name="K_TrialMsec" outputName="Msec from start" summary="Time post-commencement (msec) this trial occurred TOTAL - Not related to H:M:S"></column>
^K_TrialMsec = 5
\\\<column name="K_PreITI" outputName="Pre-trial interval" summary="Interval prior to this trial"></column>
^K_PreITI = 6
\\\<column name="K_TrialType" outputName="Trial type" summary="0=acoustic trial, 1=electrical trial, 2=discriminant acoustic trial without shock"></column>
^K_TrialType = 7
\\\<column name="K_ResponseDelay" outputName="Response Delay" summary="Delay (in ms) from alternating tone presentations to response"></column>
^K_ResponseDelay = 8
\\\<column name="K_ITIResponseDelay" outputName="ITI Response Delay" summary="Delay (in ms) from start of ITI to response"></column>
^K_ITIResponseDelay = 9
\\\</array>
\\\<constant group="general" represents="parameter" name="K_TrialIndexMultiplier" summary="Multiplier to be used for each trial"></constant>
^K_TrialIndexMultiplier = 10

\\\<array name="F" summary="Inter-trial interval offset multipliers">
LIST F = 0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79,80,81,82,83,84,85,86,87,88,89,90,91,92,93,94,95,96,97,98,99,100,
	 101,102,103,104,105,106,107,108,109,110,111,112,113,114,115,116,117,118,119,120
\\\<column name="F_IntervalOffset" summary="An integer 0-120 to multiply by the (MaxITI - MinITI) and divided by 120 to get the 'inter-trial interval'" />
^F_IntervalOffset = 1 \\\this is actually never used, because there is only one column; included for completeness
\\\</array>
\\\<constant group="general" represents="parameter" name="F_TotalOffsets" summary="Divisor to be used when using the offsets from array F (= max value of array of F, so after division falls into range 0-1 inclusive)"></constant>
^F_TotalOffsets = 120

\\\<array name="I" summary="Integer list representing acoustic stimulation possiblities">
LIST I = 2,2,3,3
\\\</array>

\\\<array name="M" summary="Integer list representing electrical stimulation possiblities">
LIST M = 3,6,6,6,7,7,7
\\\</array>

\\\<enum name="TrialType" summary="Identifiers for trial types">
\\\\<option value="0" name="^TrialType_AcousticMatchA" summary="Acoustic match A trial"></option>
^TrialType_AcousticMatchA = 0
\\\\<option value="1" name="^TrialType_AcousticMatchB" summary="Acoustic match B trial"></option>
^TrialType_AcousticMatchB = 1
\\\\<option value="2" name="^TrialType_AcousticMismatchAB" summary="Acoustic mismatch AB trial"></option>
^TrialType_AcousticMismatchAB = 2
\\\\<option value="3" name="^TrialType_AcousticMismatchBA" summary="Acoustic mismatch BA trial"></option>
^TrialType_AcousticMismatchBA = 3
\\\\<option value="4" name="^TrialType_ElectricMatchA" summary="Electric match A trial"></option>
^TrialType_ElectricMatchA = 4
\\\\<option value="5" name="^TrialType_ElectricMatchB" summary="Electric match B trial"></option>
^TrialType_ElectricMatchB = 5
\\\\<option value="6" name="^TrialType_ElectricMismatchAB" summary="Electric mismatch A-B trial"></option>
^TrialType_ElectricMismatchAB = 6
\\\\<option value="7" name="^TrialType_ElectricMismatchBA" summary="Electric mismatch B-A trial"></option>
^TrialType_ElectricMismatchBA = 7
\\\\<option value="8" name="^TrialType_NoTone" summary="No tone presentation"></option>
^TrialType_NoTone = 8
\\\</enum>


\\\\<array name="H" summary="Ultrasonic signal data">
DIM H = 60000 
\\\<column name="H_StartHour" summary="Hour of this event starting"></column>
\^H_StartHour = 0
\\\<column name="H_StartMinute" summary="Minute of this event starting"></column>
\^H_StartMinute = 1
\\\<column name="H_StartSecond" summary="Second of this event starting"></column>
\^H_StartSecond = 2
\\\<column name="H_StartMillisecond" summary="Millisecond of this event starting"></column>
\^H_StartMillisecond = 3
\\\<column name="H_StartMsec" summary="Absolute milliseconds of this event starting"></column>
\^H_StartMsec = 4
\\\<column name="H_EndHour" summary="Hour of this event ending"></column>
\^H_EndHour = 5
\\\<column name="H_EndMinute" summary="Minute of this event ending"></column>
\^H_EndMinute = 6
\\\<column name="H_EndSecond" summary="Second of this event ending"></column>
\^H_EndSecond = 7
\\\<column name="H_EndMillisecond" summary="Millisecond of this event ending"></column>
\^H_EndMillisecond = 8
\\\<column name="H_EndMsec" summary="Absolute milliseconds of this event ending"></column>
\^H_EndMsec = 9
\\\<column name="H_Band" summary="Which band led to the trigger"></column>
\^H_Band = 10
\\\</array>
\\\<constant group="general" represents="parameter" name="H_IndexMultiplier" summary="Multiplier to be used for each signal"></constant>
^H_IndexMultiplier = 11

\\\Variable declarations
\\\<!--<variable name="" summary=""></variable>-->
\\\<variable name="L" summary="Trial type"></variable>
\\\<variable name="N" summary="Current stimulus type"></variable>

\\\<variable name="P" summary="Storage variable for camera state"></variable>
\\\<variable name="Q" summary="Current offset for B array"></variable>
\\\<variable name="S" summary="Inter-trial pause in seconds (generated)"></variable>
\\\<variable name="X" summary="Inter-trial countdown in seconds (generated)"></variable>
\\\<variable name="V" summary="Temporary store for shuffling data to sound processor"></variable>

\\\<variable name="T" summary="Timer - # of msec since commencement"></variable>
\\\<variable name="U" summary="Timer - variable swapping 1"></variable>
\\\<variable name="W" summary="Timer - variable swapping 2"></variable>


\\\<stateset id="1" summary="Run the preparation and termination functions of the program">
S.S.1,
\\\<state id="1" summary="Set variables to default values">
S1,
	0":;
\\\		SET G(^G_MaxBlocks) = ^Def_MaxBlocks;
		SET G(^G_ToneDurationSec) = (^Snd_ToneDuration / 1000);
		SET G(^G_TrialDurationSec) = ^Def_TrialDuration;
		SET G(^G_InterToneIntervalSec) = (^Snd_InterToneInterval / 1000);
		SET G(^G_MinITI) = ^Def_MinITI;
		SET G(^G_MaxITI) = ^Def_MaxITI;

		SET G(^G_TrialsType) = ^Def_TrialsType;


		SET H(0) = -987.987;
		SET K(0) = -987.987;

		IF G(^G_TrialsType) = ^G_TrialType_Acoustic [@acoustic trial, @not acoustic trial]
			@acoustic trials:;
				SET G(^G_MaxBlocks) = ^Def_MaxBlocksAcoustic;
				SET G(^G_MaxTrials) = G(^G_MaxBlocks) * ^Def_TrialsPerBlockAcoustic;
				---> S5
			@not acoustic trials:;
				SET G(^G_MaxBlocks) = ^Def_MaxBlocksElectric;
				SET G(^G_MaxTrials) = G(^G_MaxBlocks) * ^Def_TrialsPerBlockElectric;
				---> S5
\\\</state>
\\\<state id="5" summary="Pause until start command is issued; then convert used-data from ms to sec where required and continue. Presumably variables are set when start is triggered.">
S5,
	#START:;
		SHOW 5, Running, 0;
		SET G(^G_TrialDuration) = (G(^G_TrialDurationSec) * 1");

		\initialise sound unit - disabled because using TDT to deliver stim
\		~InitANL926;~;
\		SET V = G(^G_ToneSPL);
\		~SetAmp(MG, BOX, V);~;
\		SET V = ^Snd_RiseFallTime;
\		~SetRF(MG, BOX, V);~;
\		SET V = G(^G_ToneDurationSec) * 1000;
\		~SetDur(MG, BOX, V);~;
\		SET V = G(^G_ToneFrequency);
\		~SetFreq(MG, BOX, V);~;

		ON ^Out_HouseLightRear;
		ON ^Out_LeftLeverRetract;

		Z^ZP_StartVideoRec;
		ON ^Out_LickShockSwitch;
		ON ^Out_Ultrasonic;
		---> S10
	0.01":;
		SET G(^G_ToneDurationTicks) = (G(^G_ToneDurationSec) * 1");
		SET G(^G_InterToneIntervalTicks) = (G(^G_InterToneIntervalSec) * 1");

		SHOW 1, Max Trials, G(^G_MaxTrials);
		SHOW 5, Awaiting Start, 0;
		SHOW 12, Tone Duration (s), G(^G_ToneDurationSec);
		SHOW 21, Minimum ITI (s), G(^G_MinITI);
		SHOW 22, Max ITI (s), G(^G_MaxITI);

		IF G(^G_TrialsType) = ^G_TrialType_Acoustic [@acoustic trial, @not acoustic trial]
			@acoustic trials:;
				SET G(^G_MaxTrials) = G(^G_MaxBlocks) * ^Def_TrialsPerBlockAcoustic;
				SET J(^J_RemainInBlock) = ^Def_TrialsPerBlockAcoustic;
				---> SX
			@not acoustic  trials:;
				SET G(^G_MaxTrials) = G(^G_MaxBlocks) * ^Def_TrialsPerBlockElectric;
				SET J(^J_RemainInBlock) = ^Def_TrialsPerBlockElectric;
				---> SX
\\\</state>

\\\<state id="10" summary="Wait for program termination">
S10,
	#Z^ZP_TerminateExperiment:;
		OFF ^Out_LeftLeverRetract;
		OFF ^Out_Ultrasonic;
		OFF ^Out_HouseLightRear;
		LOCKOFF ^Out_ShockEmitter;
		OFF ^Out_LickShockSwitch;
\		~ToneOff(MG, BOX);~;
		SET H(G(^G_UltrasonicIndexOffset)) = -987.987;
		SET K(Q + ^K_TrialIndexMultiplier) = -987.987;
		---> S20

\\\</state>
\\\<state id="10" summary="Turn off all outputs, save data and end">
S20,
  0":;
	CLEAR 5,5;
	SHOW 4, Experiment Complete, 1;
  	---> STOPABORTFLUSH
\\\</state>
\\\</stateset>


\\\<stateset id="2" summary="Operate the experiment functionally">
S.S.2,
\\\<state id="1" summary="Wait for the start trigger">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Generate randomly-determined Inter-Trial Pause; update trial data">
S2,
  0.01":;
	ON ^Out_TDBlock; \\Start block (if not already on; if already on, does nothing) 

	\\Generate inter-trial interval; must be an integer to ensure that the 'trial' beeps will temporally line up with the regular 'background' beeps.
	RANDI S = F;
	SET S = S * (G(^G_MaxITI) - G(^G_MinITI)) / ^F_TotalOffsets;
	SET S = G(^G_MinITI) + S;
	~S := Round(S);~;
	SHOW 4, Inter-trial delay, S;

	\\Update trial data
	SET Q = J(^J_CompletedTrials) * ^K_TrialIndexMultiplier;
	SET K(Q + ^K_TrialIndexMultiplier) = -987.987;
	SET K(Q + ^K_TrialNumber) = J(^J_CompletedTrials);
	SET K(Q + ^K_TrialTimeHour) = J(^J_CurrentHours), K(Q + ^K_TrialTimeMinute) = J(^J_CurrentMinutes), K(Q + ^K_TrialTimeSecond) = J(^J_CurrentSeconds), K(Q + ^K_TrialTimeMillisecond) = J(^J_CurrentMilliseconds);
	SET K(Q + ^K_TrialMsec) = T;
	SET K(Q + ^K_TrialNumber) = J(^J_CompletedTrials);
	SET K(Q + ^K_PreITI) = S;
	SET K(Q + ^K_TrialIndexMultiplier) = -987.987;
	SET K(Q + ^K_TrialType) = L;
	SHOW 6, Trial Type, L;

	\\If the block is complete, reset the block count
	IF J(^J_RemainInBlock) < 1 [@completed block, @incomplete block]
		@completed block:;
			IF G(^G_TrialsType) = ^G_TrialType_Acoustic [@acoustic trial, @not acoustic trial]
			@acoustic trials:;
				SET J(^J_RemainInBlock) = ^Def_TrialsPerBlockAcoustic;
				---> S3
			@not acoustic  trials:;
				SET J(^J_RemainInBlock) = ^Def_TrialsPerBlockElectric;
				---> S3
		@incomplete block:;
			---> S3
\\\</state>

\\\<state id="3" summary="Modify inter-trial pause to compensate for cumulative timing error">
S3,
  0.01":;
	\\Display trial type, and enter it in the data array

	SHOW 3, Remain in block, J(^J_RemainInBlock);
	Z^ZP_TrialStart;
	Z^ZP_StartTimerITI;

	\\If it is the first trial, then don't need to compensate as much due to less timepoints having passed
	IF J(^J_CompletedTrials) = 0 [@small offset, @large offset]
		@small offset:;
			SET S = S - 0.02;
			SET G(^G_ThisInterTrialIntervalTicks) = S * 1";
			---> S5
		@large offset:;
			SET S = S - 0.05;
			SET G(^G_ThisInterTrialIntervalTicks) = S * 1";
			---> S5
\\\</state>

\\\<state id="5" summary="Commence tone after inter-trial delay">
S5,
  G(^G_ThisInterTrialIntervalTicks)#T:;
	Z^ZP_StopTimerITI;
	ON ^Out_TDTrial;
	SET N = L;
	SHOW 7, Stim On, L;
	Z^ZP_StartTimer;
\	~OnFreq(MG, BOX, V);~; \Removed for sound to be presented by TDT 
	---> S6
  #R^Inp_LeverInputLeft:;
	Z^ZP_StopTimerITI;
	---> S22
\\\</state>

\\\<state id="6" summary="Detect lever press">
S6,
  G(^G_TrialDuration)#T:;
	---> S19
  #R^Inp_LeverInputLeft:;
	Z^ZP_StopTimer;
	---> S15
\\\</state>

\\\<state id="15" summary="Deliver reward">
S15,
	0.01":;
		SET Y = -1; \\set number of licks to unlimited
		Z^ZP_ExtendSipper;
		---> S16
\\\</state>

\\\<state id="16" summary="Deliver reward">
S16,
	10":;
		SET G(^G_PadTime) = 11000 - (K(Q + ^K_ResponseDelay) - 20) * 0.001 * 1";
		Z^ZP_RetractSipper;
		---> S17
\\\</state>

\\\<state id="17" summary="Pad time to ensure correct tone-timing">
S17,
	G(^G_PadTime)#T:;
		---> S19
\\\</state>

\\\<state id="19" summary="End trial">
S19,
	0.01":;
	OFF ^Out_TDTrial;
	IF J(^J_RemainInBlock) = 1 [@end block, @not end]
	@end block:;
		OFF ^Out_TDBlock;
		---> S25
	@not end:;
		---> S25
\\\</state>

\\\<state id="22" summary="Process early lever press">
S22,
	0.01":;
	SET N = ^TrialType_NoTone;
	SET Y = K(Q + ^K_ITIResponseDelay); 
	~ O := Y - (round(Y/500) * 500); ~;
	SET O = ((O * 0.001) + 9.990) * 1";
	OFF ^Out_TDTrial;
	IF J(^J_RemainInBlock) = 1 [@end block, @not end]
	@end block:;
		OFF ^Out_TDBlock;
		---> S23
	@not end:;
		---> S23
\\\</state>
\\\<state id="23" summary="Delay to resynchronise with tones after press during ITI and for penalty duration">
S23,
	O#T:;
	---> S25
\\\</state>

\\\<state id="25" summary="Generate next trial type">
S25,
	0.01":;
		Z^ZP_GenerateNextTrial;
		---> S31
\\\</state>

\\\<state id="31" summary="Check if full number of trials have been completed, and if so issue terminate command.">
S31,
	#Z^ZP_ExperimentEnd:;
		Z^ZP_TerminateExperiment;
		---> S32
	0.01":;
		CLEAR 16,16;
		Z^ZP_TrialEnd;
		SUB J(^J_RemainInBlock);
		ADD J(^J_CompletedTrials);
		SET J(^J_MeanITI) = ((S - J(^J_MeanITI)) / J(^J_CompletedTrials)) + J(^J_MeanITI);
		SHOW 2, Completed Trials, J(^J_CompletedTrials);
		SHOW 9, Mean ITI, J(^J_MeanITI);
		IF J(^J_CompletedTrials) >= G(^G_MaxTrials) [@hit max, @less than max]
			@hit max:;
				Z^ZP_TerminateExperiment;
				---> S32
			@less than max:;
				---> S2
\\\</state>
\\\</stateset>

\\\<stateset id="3" summary="Run the countdown display">
S.S.3,
\\\<state id="1" summary="Wait for the start trigger">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Wait for countdown commencement">
S2,
	#Z^ZP_TrialStart:;
		SET X = S;
		---> S3
\\\</state>
\\\<state id="3" summary="Run countdown">
S3,
	0.01":;
		SET X = X - (1/1");
		SHOW 4, Next trial in (s), X;
		---> SX
	#Z^ZP_TrialEnd:;
		SHOW 4, Wait..., 0;
		---> S2
\\\</state>
\\\</stateset>

\\\<stateset id="4" summary="Run stimulus presentations">
S.S.4,
\\\<state id="1" summary="Wait for start signal, then jump to appropriate tone presentation area">
S1,
	#START:;
		IF G(^G_TrialsType) = ^G_TrialType_Acoustic [@acoustic, @not acoustic]
			@acoustic:;
			RANDD L = I; \select trial type for acoustic
			IF L = ^TrialType_AcousticMismatchAB [@ac mismatch ab, @not ac mismatch ab]
				@ac mismatch ab:;
				SET N = 0;
				OFF ^Out_TDStimType;
				ON ^Out_TDStim1;
				SHOW 7, Delivering stimulus A, 0;
				---> S10
				@ac mismatch ba:;
				SET N = 1;
				OFF ^Out_TDStimType;
				ON ^Out_TDStim2;
				SHOW 7, Delivering stimulus B, 0;
				---> S10
			@not acoustic:;
				\\First presentation for electrical trials is always an acoustic mismatch AB
				SET L = ^TrialType_AcousticMismatchAB;
				SET N = 1;
				OFF ^Out_TDStimType;
				ON ^Out_TDStim1;
				SHOW 7, Delivering stimulus A, 0;
				---> S10
\\\</state>
\\\<state id="3" summary="Pause for inter-tone interval, then jump to appropriate tone presentation area">
S3,
	G(^G_InterToneIntervalTicks)#T:;
		SHOW 8, Tr Type B, N;
		IF N = ^TrialType_AcousticMatchA [@ac match A, @not ac match A]
			@ac match A:;
				OFF ^Out_TDStimType;
				ON ^Out_TDStim1;
				SHOW 7, Delivering stimulus A, 0;
				---> S10
			@not ac match A:;
				IF N = ^TrialType_AcousticMatchB [@ac match B, @not ac match B]
				@ac match B:;
					OFF ^Out_TDStimType;
					ON ^Out_TDStim2;
					SHOW 7, Delivering stimulus B, 0;
					---> S10
				@not ac match B:;
				IF N = ^TrialType_AcousticMismatchAB [@ac mismatch ab, @not ac mismatch ab]
					@ac mismatch ab:;
					OFF ^Out_TDStimType;
					ON ^Out_TDStim1;
					SHOW 7, Delivering stimulus A, 0;
					---> S12
					@not ac mismatch ab:;
					IF N = ^TrialType_AcousticMismatchBA [@ac mismatch ba, @not ac mismatch ba]
						@ac mismatch ba:;
						OFF ^Out_TDStimType;
						ON ^Out_TDStim2;
						SHOW 7, Delivering stimulus B, 0;
						---> S16
						@not ac mismatch ba:;
						IF N = ^TrialType_ElectricMatchA [@el match A, @not el match A]
							@el match A:;
							ON ^Out_TDStimType;
							ON ^Out_TDStim1;
							SHOW 7, Delivering stimulus A, 0;
							---> S10
							@not el match A:;
							IF N = ^TrialType_ElectricMatchB [@el match B, @not el match B]
								@ac match B:;
								ON ^Out_TDStimType;
								ON ^Out_TDStim2;
								SHOW 7, Delivering stimulus B, 0;
								---> S10
								@not ac match B:;
								IF N = ^TrialType_ElectricMismatchAB [@el mismatch AB, @not el mismatch AB]
									@el mismatch AB:;
									ON ^Out_TDStimType;
									ON ^Out_TDStim1;
									SHOW 7, Delivering stimulus A, 0;
									---> S12
									@not el mismatch AB:;
									IF N = ^TrialType_ElectricMismatchBA [@el mismatch BA, @no tone]
										@el mismatch ba:;
										ON ^Out_TDStimType;
										ON ^Out_TDStim2;
										SHOW 7, Delivering stimulus B, 0;
										---> S16
										@no tone:;
											---> SX
	#Z^ZP_ExperimentEnd:;
		---> S32
\\\</state>
\\\<state id="10" summary="End match">
S10,
	G(^G_ToneDurationTicks)#T:;
		OFF ^Out_TDStim1;
		OFF ^Out_TDStim2;
		SHOW 7, Stim off, 0;
			---> S3
\\\</state>
\\\<state id="12,13,14" summary="Present mismatch AB">
S12,
	G(^G_ToneDurationTicks)#T:;
		OFF ^Out_TDStim1;
		SHOW 7, Stim off, 0;
		---> S13
S13,
	G(^G_InterToneIntervalTicks)#T:;
		ON ^Out_TDStim2;
		SHOW 7, Delivering stimulus B, 0;
		---> S14
S14,
	G(^G_ToneDurationTicks)#T:;
		OFF ^Out_TDStim2;
		SHOW 7, Stim off, 0;
		---> S3
\\\</state>

\\\<state id="16,17,18,19" summary="Present mismatch BA">
S16,
	G(^G_ToneDurationTicks)#T:;
		OFF ^Out_TDStim2;
		SHOW 7, Stim off, 0;
		---> S17
S17,
	G(^G_InterToneIntervalTicks)#T:;
		ON ^Out_TDStim1;
		SHOW 7, Delivering stimulus B, 0;
		---> S18
S18,
	G(^G_ToneDurationTicks)#T:;
		OFF ^Out_TDStim1;
		SHOW 7, Stim off, 0;
		---> S3
\\\</state>

\\\</stateset>

\\\<stateset id="5" summary="Trial random generator">
S.S.5,
\\\<state id="1" summary="Wait for randomiser trigger, then generate next trial type">
S1,
	#Z^ZP_GenerateNextTrial:;
		\\Select next trial type
		\\acoustic only trials?
		IF G(^G_TrialsType) = ^G_TrialType_Acoustic [@acoustic, @not acoustic]
			@acoustic:;
			RANDD L = I; \select trial type for acoustic
			---> S2
		@not acoustic:;
			\\If end of block, and doing electrical trials, then the next must be an acoustic mismatch - always used as first in block
			IF J(^J_RemainInBlock) = 1 [@end block, @not end]
			@end block:;
				\\If the block is complete and it is electrical trials, set an acoustic mismatch AB to start the block
				SET L = ^TrialType_AcousticMismatchAB;
				---> S2
			@not end:;
				\\The block is not complete, so any type of electrical trial can be used
				RANDD L = M; \select trial type for electrical
				---> S2

\\\</state>
\\\<state id="2" summary="Work out what should be presented prior to start of next trial">
S2,
	0.01":;
		\If acoustic AB, then start with continuous stim A presentations
		~ IF (L = 2) then begin N := 0 ; end; ~;
		\If acoustic BA, then start with continuous stim B presentations
		~ IF (L = 3) then begin N := 1 ; end; ~;
		\If electrical AB, then start with continuous electrical stim A presentations
		~ IF (L = 6) then begin N := 4 ; end; ~;
		\If electrical BA, then start with continuous electrical stim B presentations
		~ IF (L = 7) then begin N := 5 ; end; ~;
		---> S1
\\\</state>
\\\</stateset>



\\\<stateset id="7" summary="Timer - counts up in msec (in steps of 10 msec)">
S.S.7,
\\\<state id="1" summary="Wait for start trigger">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Increment counter, hour, minutes, seconds, milliseconds">
S2,
	0.01":;
		SET T = T + 10;
		SET J(^J_CurrentMilliseconds) = J(^J_CurrentMilliseconds) + 10;
		SET U = J(^J_CurrentMilliseconds), W = J(^J_CurrentSeconds);
		~ IF (U = 1000) then begin U := 0; W := W + 1; end; ~;
		SET J(^J_CurrentMilliseconds) = U, U = W, W = J(^J_CurrentMinutes);
		~ IF (U = 60) then begin U := 0; W := W + 1; end; ~;
		SET J(^J_CurrentSeconds) = U, U = W, W = J(^J_CurrentHours);
		~ IF (U = 60) then begin U := 0; W := W + 1; end; ~;
		SET J(^J_CurrentMinutes) = U, J(^J_CurrentHours) = W;
		SHOW 16, Hours, J(^J_CurrentHours);
		SHOW 17, Minutes, J(^J_CurrentMinutes);
		SHOW 18, Seconds, J(^J_CurrentSeconds);
		SHOW 19, Milliseconds, J(^J_CurrentMilliseconds);

			---> SX
	#Z^ZP_TerminateExperiment:;
		---> S32
\\\</state>
\\\</stateset>

\\\<stateset id="20" summary="Camera management - connect to camera system and start/stop video">
S.S.20,
\\\<state id="1" summary="Set constants for video connection state">
S1,
	0":;
		~P := UNCONNECTED;~;
		SET G(^G_CamUnconnectedState) = P;
        ~P := CONNECT_OK;~;
		SET G(^G_CamConnectOkState) = P;
        ~P := CONNECT_FAIL;~;
		SET G(^G_CamConnectFailState) = P;
		---> S2
\\\</state>
\\\<state id="2" summary="Wait for video commands">
S2,
	#Z^ZP_StartVideoRec:;
		~ IF ((box = 1) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX1', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 2) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX2', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 3) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX3', StartSavingEvent, 'StartEvent'); end; ~;
		~ IF ((box = 4) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX4', StartSavingEvent, 'StartEvent'); end; ~;
		---> SX
	#Z^ZP_EndVideoRec:;
		~ IF ((box = 1) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX1', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 2) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX2', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 3) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX3', StopSavingEvent, 'StopEvent'); end; ~;
		~ IF ((box = 4) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX4', StopSavingEvent, 'StopEvent'); end; ~;
		---> SX
	#Z^ZP_TerminateExperiment:;
\\		~ IF ((box = 1) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX1', StopSavingEvent, 'StopEvent'); end; ~;
\\		~ IF ((box = 2) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX2', StopSavingEvent, 'StopEvent'); end; ~;
\\		~ IF ((box = 3) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX3', StopSavingEvent, 'StopEvent'); end; ~;
\\		~ IF ((box = 4) and (P = CONNECT_OK)) then begin WriteEventVM('.', 'BOX4', StopSavingEvent, 'StopEvent'); end; ~;

		~ IF ((box = 1) and (P = CONNECT_OK)) then begin DisconnectVM('.', 'BOX1'); P := GetIfaceStatus();end;~;
		~ IF ((box = 2) and (P = CONNECT_OK)) then begin DisconnectVM('.', 'BOX2'); P := GetIfaceStatus();end;~;
		~ IF ((box = 3) and (P = CONNECT_OK)) then begin DisconnectVM('.', 'BOX3'); P := GetIfaceStatus();end;~;
		~ IF ((box = 4) and (P = CONNECT_OK)) then begin DisconnectVM('.', 'BOX4'); P := GetIfaceStatus();end;~;
		---> S32
	0.5":;
		~ IF ((box = 1) and (P <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX1'); P := GetIfaceStatus();end;~;
		~ IF ((box = 2) and (P <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX2'); P := GetIfaceStatus();end;~;
		~ IF ((box = 3) and (P <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX3'); P := GetIfaceStatus();end;~;
		~ IF ((box = 4) and (P <> CONNECT_OK)) then begin ConnectToVMEx(MG, BOX, '.', 'BOX4'); P := GetIfaceStatus();end;~;
		IF (P = G(^G_CamUnconnectedState)) [@UNCON, @OTHER]
			 @UNCON: SHOW 26, Video Unconnected,0 ---> SX
             @OTHER: IF (P = G(^G_CamConnectOkState)) [@CONNECTED, @OTHER2]
                @CONNECTED: SHOW 26, Video OK,0 ---> SX
                @OTHER2: IF (P = G(^G_CamConnectFailState)) [@FAIL, @OTHER3]
                   @FAIL:   SHOW 26, Video Failed,0 ---> SX
                   @OTHER3: SHOW 26, Video Unknown,0  ---> SX
\\\</state>
\\\</stateset>



\\\<stateset id="21" summary="Capture ultrasonic A signal times">
S.S.21,
\\\<state id="1" summary="Wait for start signal">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Wait for an ultrasonic signal; 2 sequential readings of ultrasonic sound are required - otherwise counted as a 'glitch'">
S2,
	#R^Inp_UltrasonicA:;
		ADD G(^G_USSequentialReadingsA);
		IF G(^G_USSequentialReadingsA) > 1 [@above threshold, @not above threshold]
			@above threshold:;
				SET G(^G_USSequentialReadingsA) = 0;
				SET G(^G_USEventIndexA) = G(^G_UltrasonicIndexOffset);
				SET G(^G_UltrasonicIndexOffset) = G(^G_UltrasonicIndexOffset) + ^H_IndexMultiplier;
				SET H(G(^G_UltrasonicIndexOffset)) = -987.987;
				SET H(G(^G_USEventIndexA) + 0) = J(^J_CurrentHours), H(G(^G_USEventIndexA) + 1) = J(^J_CurrentMinutes), H(G(^G_USEventIndexA) + 2) = J(^J_CurrentSeconds), H(G(^G_USEventIndexA) + 3) = J(^J_CurrentMilliseconds);
				SET H(G(^G_USEventIndexA) + 4) = L;
				SET H(G(^G_USEventIndexA) + 10) = 1;
				---> S3
			@not above threshold:;
				---> SX

	#Z^ZP_TerminateExperiment:;
		---> S32

	0.02":;
		SET G(^G_USSequentialReadingsA) = 0;
		---> S2
\\\</state>
\\\<state id="3" summary="Wait until no ultrasonic signal for 20ms, then reset to 'no-ultrasonic' state">
S3,
	#R^Inp_UltrasonicA:;
		SET H(G(^G_USEventIndexA) + 5) = J(^J_CurrentHours), H(G(^G_USEventIndexA) + 6) = J(^J_CurrentMinutes), H(G(^G_USEventIndexA) + 7) = J(^J_CurrentSeconds), H(G(^G_USEventIndexA) + 8) = J(^J_CurrentMilliseconds);
		SET H(G(^G_USEventIndexA) + 9) = L;
		---> SX

	#Z^ZP_TerminateExperiment:;
		---> S32

	0.02":;
		---> S2
\\\</state>
\\\</stateset>

\\\<stateset id="22" summary="Capture ultrasonic B signal times">
S.S.22,
\\\<state id="1" summary="Wait for start signal">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Wait for an ultrasonic signal; 2 sequential readings of ultrasonic sound are required - otherwise counted as a 'glitch'">
S2,
	#R^Inp_UltrasonicA:;
		ADD G(^G_USSequentialReadingsB);
		IF G(^G_USSequentialReadingsB) > 1 [@above threshold, @not above threshold]
			@above threshold:;
				SET G(^G_USSequentialReadingsB) = 0;
				SET G(^G_USEventIndexB) = G(^G_UltrasonicIndexOffset);
				SET G(^G_UltrasonicIndexOffset) = G(^G_UltrasonicIndexOffset) + ^H_IndexMultiplier;
				SET H(G(^G_UltrasonicIndexOffset)) = -987.987;
				SET H(G(^G_USEventIndexB) + 0) = J(^J_CurrentHours), H(G(^G_USEventIndexB) + 1) = J(^J_CurrentMinutes), H(G(^G_USEventIndexB) + 2) = J(^J_CurrentSeconds), H(G(^G_USEventIndexB) + 3) = J(^J_CurrentMilliseconds);
				SET H(G(^G_USEventIndexB) + 4) = L;
				SET H(G(^G_USEventIndexB) + 10) = 2;
				---> S3
			@not above threshold:;
				---> SX

	#Z^ZP_TerminateExperiment:;
		---> S32

	0.02":;
		SET G(^G_USSequentialReadingsB) = 0;
		---> S2
\\\</state>
\\\<state id="3" summary="Wait until no ultrasonic signal for 20ms, then reset to 'no-ultrasonic' state">
S3,
	#R^Inp_UltrasonicA:;
		SET H(G(^G_USEventIndexB) + 5) = J(^J_CurrentHours), H(G(^G_USEventIndexB) + 6) = J(^J_CurrentMinutes), H(G(^G_USEventIndexB) + 7) = J(^J_CurrentSeconds), H(G(^G_USEventIndexB) + 8) = J(^J_CurrentMilliseconds);
		SET H(G(^G_USEventIndexB) + 9) = L;
		---> SX

	#Z^ZP_TerminateExperiment:;
		---> S32

	0.02":;
		---> S2
\\\</state>
\\\</stateset>



\\\<stateset id="23" summary="Operate the sipper">
S.S.23,
\\\<state id="1" summary="Wait for sipper extend (ZP_ExtendSipper) to be triggered">
S1,
	#Z^ZP_ExtendSipper:;
		OFF ^Out_LickShockSwitch; \precautionary; should already be off.
		ON ^Out_BeverageDispenser;
		IF Y <= 0 [@no sip limit, @sip limit]
			@no sip limit:;
				---> S3
			@sip limit:;
				---> S5
\\\</state>
\\\<state id="3" summary="Extend sipper until ZP_RetractSipper occurs">
S3,
	#Z^ZP_RetractSipper:;
		OFF ^Out_BeverageDispenser;
		---> S1
\\\</state>
\\\<state id="5" summary="Extend sipper until ZP_RetractSipper occurs or max sips hit">
S5,
	#Z^ZP_RetractSipper:;
		OFF ^Out_BeverageDispenser;
		---> S1
	Y#R^Inp_Lickometer:;
		Z^ZP_SipperLimitHit;
		OFF ^Out_BeverageDispenser;
		---> S1
\\\</state>
\\\</stateset>

\\\<stateset id="24" summary="Operate the post-tone pre-press timer">
S.S.24,
\\\<state id="1" summary="Wait for a Z-pulse ^ZP_StartTimer">
S1,
	#Z^ZP_StartTimer:;
		--->S2
\\\</state>
\\\<state id="2" summary="Run a timer in 10msec blocks until Z-pulse ^ZP_StopTimer received. Then reset to S1.">
S2,
	#Z^ZP_StopTimer:;
		--->S1
	0.01":;
		SET	K(Q + ^K_ResponseDelay) = K(Q + ^K_ResponseDelay) + 10;
		SHOW 10, Response Time, K(Q + ^K_ResponseDelay);
		---> SX
\\\</state>
\\\</stateset>

\\\<stateset id="25" summary="Operate the inter-trial interval pre-press timer">
S.S.25,
\\\<state id="1" summary="Wait for a Z-pulse ^ZP_StartTimer">
S1,
	#Z^ZP_StartTimerITI:;
		--->S2
\\\</state>
\\\<state id="2" summary="Run a timer in 10msec blocks until Z-pulse ^ZP_StopTimer received. Then reset to S1.">
S2,
	#Z^ZP_StopTimerITI:;
		--->S1
	0.01":;
		SET	K(Q + ^K_ITIResponseDelay) = K(Q + ^K_ITIResponseDelay) + 10;
		SHOW 10, Response Time, K(Q + ^K_ITIResponseDelay);
		---> SX
\\\</state>
\\\</stateset>


\\\<stateset id="26" summary="Termination detector - check if experiment manually terminated">
S.S.26,
\\\<state id="1" summary="Wait for start trigger">
S1,
	#START:;
		---> S2
\\\</state>
\\\<state id="2" summary="Check for experiment termination">
S2,
	#K^KP_ExperimentEnd:;
		SHOW 4, Manually terminated, 0;
		---> S3
\\\</state>
\\\<state id="3" summary="Trigger a ZP_ExperimentEnd every 10ms - this will make sure that everything receives it even">
S3,
	0.01":;
		Z^ZP_ExperimentEnd;
		---> SX
\\\</state>
\\\</stateset>


\\\</program>
